CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:67
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Module Part0: Load data and apply flat field illumination correction']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
    Input data file location:Default Input Folder|/Users/cho/Documents/Hesam/letsMakeCppipe/sample
    Name of the file:sample_fromIllum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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notes:['Module Part 0 End']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
    Select the input image:OrigAGP
    Name the output image:FunctionAppliedAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigBODIPYRNA
    Name the output image:FunctionAppliedBODIPYRNA
    Select the illumination function:IllumBODIPYRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:FunctionAppliedBrightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:FunctionAppliedDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:FunctionAppliedMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:FunctionAppliedRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:3|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notes:['Module Part1: Create [Lipid, Mito, LipidMitoInteraction, MitoLipidInteraction] Channels']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
    Select the input image:FunctionAppliedBODIPYRNA
    Name the primary objects to be identified:LipidOccupancy
    Typical diameter of objects, in pixel units (Min,Max):1,2
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:4|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
    Select the input image:FunctionAppliedBODIPYRNA
    Name the output image:AllLipid
    Use objects or an image as a mask?:Objects
    Select object for mask:LipidOccupancy
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    Invert the mask?:No

Threshold:[module_num:5|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
    Select the input image:AllLipid
    Name the output image:BinaryAllLipid
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0
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
Threshold:[module_num:6|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
    Select the input image:FunctionAppliedMito
    Name the output image:BinaryAllMito
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ImageMath:[module_num:7|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AllMito
    Image or measurement?:Image
    Select the first image:BinaryAllMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FunctionAppliedMito
    Multiply the second image by:1.0
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
ImageMath:[module_num:8|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BinaryLipidMitoMultiplied
    Image or measurement?:Image
    Select the first image:BinaryAllLipid
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BinaryAllMito
    Multiply the second image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedBinaryLipidMitoMultiplied
    Image or measurement?:Image
    Select the first image:BinaryLipidMitoMultiplied
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:10|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Lipid
    Image or measurement?:Image
    Select the first image:AllLipid
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedBinaryLipidMitoMultiplied
    Multiply the second image by:1.0
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
ImageMath:[module_num:11|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LipidMitoOverlap
    Image or measurement?:Image
    Select the first image:BinaryLipidMitoMultiplied
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AllLipid
    Multiply the second image by:1.0
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
ImageMath:[module_num:12|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:Mito
    Image or measurement?:Image
    Select the first image:AllMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedBinaryLipidMitoMultiplied
    Multiply the second image by:1.0
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
ImageMath:[module_num:13|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notes:['End of Module Part1', 'extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MitoLipidOverlap
    Image or measurement?:Image
    Select the first image:BinaryLipidMitoMultiplied
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AllMito
    Multiply the second image by:1.0
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
ImageMath:[module_num:14|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RunCellpose:[module_num:15|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notes:['Module Part2: Create Channel used for Segmentation [LipidActinDNA]. composed of BODIPYRNA, DNA, AGP']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
    Select the input image:FunctionAppliedDNA
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:PreNuclei
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:Yes

ImageMath:[module_num:16|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:DNA
    Image or measurement?:Image
    Select the first image:FunctionAppliedDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:PreNuclei
    Name the output image:BinaryDNA
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:18|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedBinaryDNA
    Image or measurement?:Image
    Select the first image:BinaryDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:19|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedBinaryAllLipid
    Image or measurement?:Image
    Select the first image:BinaryAllLipid
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:20|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedBinaryAllMito
    Image or measurement?:Image
    Select the first image:BinaryAllMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:21|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notes:['Module Part2: Create Channel used for Segmentation [LipidActinDNA]. composed of BODIPYRNA, DNA, AGP']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
    Select the input image:FunctionAppliedAGP
    Name the output image:AGPOutline
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:AGPOutline
    Name the primary objects to be identified:OccupancySpeckleAGP
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:OccupancySpeckleAGP
    Name the output image:SpeckleAGP
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:24|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedSpeckleAGP
    Image or measurement?:Image
    Select the first image:SpeckleAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:25|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:CleanedOutlineAGP
    Image or measurement?:Image
    Select the first image:AGPOutline
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedSpeckleAGP
    Multiply the second image by:1.0
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
ImageMath:[module_num:26|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedCleanedOutlineAGP
    Image or measurement?:Image
    Select the first image:CleanedOutlineAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:27|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:OutlinedAGP
    Image or measurement?:Image
    Select the first image:InvertedCleanedOutlineAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FunctionAppliedAGP
    Multiply the second image by:1.0
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
ImageMath:[module_num:28|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:AGPAddedToLipidMitoDNA
    Image or measurement?:Image
    Select the first image:OutlinedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AllLipid
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:AllMito
    Multiply the third image by:1
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    Image or measurement?:Image
    Select the fourth image:BinaryDNA
    Multiply the fourth image by:1.0
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
Threshold:[module_num:29|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
    Select the input image:AGPAddedToLipidMitoDNA
    Name the output image:FinalBinaryAGP
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.001
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
ImageMath:[module_num:30|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvertedFunctionAppliedAGP
    Image or measurement?:Image
    Select the first image:FunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:31|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:FinalAGP
    Image or measurement?:Image
    Select the first image:InvertedFunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FinalBinaryAGP
    Multiply the second image by:1.0
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
ImageMath:[module_num:32|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:FinalAGP
    Image or measurement?:Image
    Select the first image:FunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:33|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
    Select the input image:FunctionAppliedAGP
    Name the output image:AGPLineStructure
    Select the operation:Enhance
    Feature size:80
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

Threshold:[module_num:34|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
    Select the input image:AGPLineStructure
    Name the output image:ThresholdedAGPLineStructure
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ImageMath:[module_num:35|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedThresholdedAGPLineStructure
    Image or measurement?:Image
    Select the first image:ThresholdedAGPLineStructure
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:36|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LineStructuredAGP
    Image or measurement?:Image
    Select the first image:FunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdedAGPLineStructure
    Multiply the second image by:1.0
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
ImageMath:[module_num:37|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:AGP
    Image or measurement?:Image
    Select the first image:FunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedThresholdedAGPLineStructure
    Multiply the second image by:1.0
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
ImageMath:[module_num:38|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGP
    Image or measurement?:Image
    Select the first image:FunctionAppliedAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifySecondaryObjects:[module_num:39|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
    Select the input objects:PreNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:FinalAGP
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0001,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:40|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:41|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:42|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
    Select the input image:FunctionAppliedRNA
    Name the primary objects to be identified:OccupancyRNA
    Typical diameter of objects, in pixel units (Min,Max):1,2
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.025,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:43|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
    Select the input objects:OccupancyRNA
    Name the output image:BinaryAllRNA
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:44|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AllRNA
    Image or measurement?:Image
    Select the first image:FunctionAppliedRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BinaryAllRNA
    Multiply the second image by:1.0
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
ImageMath:[module_num:45|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucleiRNA
    Image or measurement?:Image
    Select the first image:AllRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BinaryDNA
    Multiply the second image by:1.0
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
ImageMath:[module_num:46|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notes:['extract features from here']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CytoplasmRNA
    Image or measurement?:Image
    Select the first image:AllRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedBinaryDNA
    Multiply the second image by:1.0
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
ImageMath:[module_num:47|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notes:['extract features from here']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Brightfield
    Image or measurement?:Image
    Select the first image:FunctionAppliedBrightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:48|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GrayToColor:[module_num:49|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored blue:FunctionAppliedDNA
    Name the output image:nuclei_outline
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:50|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nuclei_outline
    Name the output image:NucleiOutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0000FF
    Select objects to display:Nuclei
    Select outline color:#FFFF0A
    Select objects to display:Cells

GrayToColor:[module_num:51|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:cell_outline
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    Hidden:4
    Image name:FunctionAppliedDNA
    Color:#0000FF
    Weight:1.0
    Image name:FunctionAppliedBODIPYRNA
    Color:#00FF00
    Weight:1.0
    Image name:FunctionAppliedMito
    Color:#FB0207
    Weight:1.0
    Image name:FunctionAppliedAGP
    Color:#FFFF0A
    Weight:1.0

OverlayOutlines:[module_num:52|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cell_outline
    Name the output image:CellOutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0000FF
    Select objects to display:Nuclei
    Select outline color:#FFFF0A
    Select objects to display:Cells

SaveImages:[module_num:53|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutline
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_\g<Site>_cellOutline
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:54|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutline
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_\g<Site>_nucleiOutline
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ImageMath:[module_num:55|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureColocalization:[module_num:56|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select images to measure:AGP, Brightfield, CytoplasmRNA, DNA, LineStructuredAGP, Lipid, LipidMitoOverlap, Mito, MitoLipidOverlap, NucleiRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:57|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select images to measure:AGP, Brightfield, CytoplasmRNA, DNA, LineStructuredAGP, Lipid, LipidMitoOverlap, Mito, MitoLipidOverlap, NucleiRNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:58|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select images to measure:AGP, Brightfield, CytoplasmRNA, DNA, LineStructuredAGP, Lipid, LipidMitoOverlap, Mito, MitoLipidOverlap, NucleiRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:59|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select images to measure:AGP, Brightfield, CytoplasmRNA, DNA, LineStructuredAGP, Lipid, LipidMitoOverlap, Mito, MitoLipidOverlap, NucleiRNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectNeighbors:[module_num:60|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:61|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:62|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notes:['AGP o', 'Brightfield o', 'CytoplasmRNA o', 'DNA o', 'LineStructuredAGP o', 'Lipid o', 'LipidMitoOverlap o', 'Mito o', 'MitoLipidOverlap o', 'NucleiRNA o', '', '', '', '', '', '', '']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
    Select images to measure:AGP, Brightfield, CytoplasmRNA, DNA, LineStructuredAGP, Lipid, LipidMitoOverlap, Mito, MitoLipidOverlap, NucleiRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:15

ImageMath:[module_num:63|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RelateObjects:[module_num:64|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
    Parent objects:Cells
    Child objects:LipidOccupancy
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:LipidOccupancyRelate
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
RelateObjects:[module_num:65|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
    Parent objects:Cytoplasm
    Child objects:OccupancyRNA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CytoplasmRNAOccupancyRelate
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
RelateObjects:[module_num:66|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
    Parent objects:Nuclei
    Child objects:OccupancyRNA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NucleiRNAOccupancyRelate
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
ExportToSpreadsheet:[module_num:67|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
